PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Teamprojekt
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine StartScreen
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    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textStartMessage
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Hiermit startet das Experiment!

        Du musst 10 Blocks absolvieren.
        Gib nach jeder Bewegung an, ob es sich um eine Elementbewegung ('F'-Taste) oder eine Gruppenbewegung ('J'-Taste) handelte.

        Drücke die Leertaste, um zu beginnen.
  Routine trialPortal1
    RoutineSettingsComponent trialPortal1
      disabled = True
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  Routine trialPortal2
    RoutineSettingsComponent trialPortal2
      disabled = True
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  Routine blankVariable
    RoutineSettingsComponent blankVariable
      disabled = True
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  Routine trialBarrier1
    RoutineSettingsComponent trialBarrier1
      disabled = True
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    PolygonComponent ternusObjLeft_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_3
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialBarrier2
    RoutineSettingsComponent trialBarrier2
      disabled = True
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    PolygonComponent ternusObjLeft_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_4
      fillColor [set every repeat] = $objectColor
      lineColor [set every repeat] = $objectColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_4
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard1
    RoutineSettingsComponent trialStandard1
      disabled = True
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    PolygonComponent ternusObjLeft_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_5
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard2
    RoutineSettingsComponent trialStandard2
      disabled = True
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    PolygonComponent ternusObjLeft_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_6
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    KeyboardComponent keyStandard
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ternusFrame1
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    CodeComponent codeObjectParameters
      Code Type = Auto->JS
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      Begin Experiment:
        barrierPos = (2,2)

        # default Frame 2 Ternus colors
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"
      Begin Routine:
        colorList = [
            "#E41A1C",  # red
            "#377EB8",  # blue
            "#4DAF4A",  # green
            "#984EA3",  # purple
            "#FF7F00",  # orange
            "#A65628",  # brown
            "#F781BF",  # pink
            "#1B9E77"   # teal
        ]

        causalColor = np.random.choice(colorList)

        direction = np.random.choice(["LR", "RL"])

        if direction == "LR":
            leftFrame1_Pos = (-3, 2)
            middleFrame1_Pos = (-1, 2)
            rightFrame1_Pos = (1, 2)

            leftFrame2_Pos = (-1, 2)
            middleFrame2_Pos = (1, 2)
            rightFrame2_Pos = (3, 2)

        elif direction == "RL":
            leftFrame1_Pos = (-1, 2)
            middleFrame1_Pos = (1, 2)
            rightFrame1_Pos = (3, 2)

            leftFrame2_Pos = (-3, 2)
            middleFrame2_Pos = (-1, 2)
            rightFrame2_Pos = (1, 2)

        # default: invisible causal objects
        portalOpacity = 0
        barrierOpacity = 0
        barrierPos = (2,2)

        # default Ternus color
        ternusColor = "black"

        # reset every trial
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"

        if condition == "Portal":
            portalOpacity = 1
            barrierOpacity = 0


        elif condition == "Barrier":
            portalOpacity = 0
            barrierOpacity = 1


        elif condition == "Standard":
            portalOpacity = 0
            barrierOpacity = 0
            ternusColor = "black"

        # color-change only in Portal/Barrier
        if condition == "Portal" or condition == "Barrier":
            if direction == "LR":
                rightFrame2_Color = causalColor
                barrierPos = (2,2)
            elif direction == "RL":
                leftFrame2_Color = causalColor
                barrierPos = (-2,2)

        thisExp.addData("causalColor", causalColor)
        thisExp.addData("direction", direction)
    PolygonComponent ternusObjLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalLeft
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blankISI
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    PolygonComponent FixationCrossBlank
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interstim_interval
      units = deg
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  Routine ternusFrame2
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = $ternusDuration
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    PolygonComponent ternusObjLeft_2
      fillColor [set every repeat] = $leftFrame2_Color
      lineColor [set every repeat] = $leftFrame2_Color
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle_2
      fillColor = $middleFrame2_Color
      lineColor = $middleFrame2_Color
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight_2
      fillColor [set every repeat] = $rightFrame2_Color
      lineColor [set every repeat] = $rightFrame2_Color
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeft_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blockBreak
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    CodeComponent codeBlockCount
      Code Type = Auto->JS
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      Begin Routine:
        blockNumber += 1

        breakText = (
            "Sehr gut! Du hast Block " +str(blockNumber) + " von 10 abgeschlossen.\n\n"
            "Mach gerne eine kurze Pause.\n\n"
            "Bitte drücke die 'F'-Taste, wenn sich die Elemente unabhängig voneinander bewegen "
            "(Elementbewegung), und die 'J'-Taste, wenn sich die Elemente gemeinsam "
            " bewegen (Gruppenbewegung).\n\n"
            "Drücke die Leertaste, um mit dem nächsten Block fortzufahren."
        )

        if blockNumber == 10:
            breakText = (
            "Sehr gut! Du hast Block " +str(blockNumber) + " von 10 abgeschlossen.\n\n"
            "Das Experiment ist damit beendet! \n\n"
            "Du kannst den Arbeitsplatz jetzt verlassen und dem Versuchsleiter Bescheid geben.\n\n"
            "Vielen Dank für die Teilnahme!"
        )
    KeyboardComponent keyBlockContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textBlockInstructions
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakText
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  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Das Experiment ist abgeschlossen!

        Du kannst den Arbeitsplatz jetzt verlassen und dem Versuchsleiter Bescheid geben.

        Vielen Dank für die Teilnahme!
  Routine blank800
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    PolygonComponent FixationCrossBlank800
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = deg
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  Routine InstructionScreen
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    KeyboardComponent keyInstructionContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent textInstructions
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Im folgenden Teil der Studie siehst du wiederholt kurze Abfolgen von drei Kreisen.

        Zwischen den beiden Darstellungen können die Kreise auf unterschiedliche Weise wahrgenommen werden:


        • Bei einer Gruppenbewegung scheinen sich alle drei Kreise gemeinsam als Gruppe zu bewegen.

        • Bei einer Elementbewegung entsteht der Eindruck, dass zwei Kreise ihre Position beibehalten, während ein weiterer Kreis verschwindet und auf der gegenüberliegenden Seite wieder erscheint.

        Deine Aufgabe besteht darin, bei jedem Durchgang anzugeben, welche Wahrnehmung du hattest.

        Drücke:

        F = Elementbewegung

        J = Gruppenbewegung

        Es gibt keine richtigen oder falschen Antworten. Bitte gib jeweils die Wahrnehmung an, die deinem Eindruck am besten entspricht.

         Zunächst siehst du zwei Beispiele und bearbeitest anschließend einige Übungsdurchgänge.

        Bitte fixiere während aller Durchgänge das Fixationskreuz in der Bildschirmmitte.

        Drücke die Leertaste, um fortzufahren.
  Routine blank160
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    PolygonComponent FixationCrossBlank160
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.16
      units = deg
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  Routine elementMotionExplained
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    KeyboardComponent keyElementMotionExplained
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textElementMotion
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Bei sehr kurzen Unterbrechungen entsteht häufig der Eindruck einer Elementbewegung.



        Bei kurzen Unterbrechungen entsteht häufig der Eindruck einer Elementbewegung. Dabei scheinen zwei Kreise ihre Position beizubehalten, während ein weiterer Kreis auf der gegenüberliegenden Seite erscheint.



        Drücke die Leertaste, um fortzufahren.
  Routine groupMotionExplained
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    KeyboardComponent keyGroupMotionExplained
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textGroupMotion
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Bei längeren Unterbrechungen entsteht häufig der Eindruck einer Gruppenbewegung.



        Dabei scheinen sich alle drei Kreise gemeinsam als Gruppe zu bewegen.



        Drücke die Leertaste, um mit den Übungsdurchgängen zu beginnen.

        Dabei musst du nach jeder Bewegung deinen Eindruck angeben, ob es sich um eine Elementbewegung ('F'-Taste) oder eine Gruppenbewegung ('J'-Taste) handelte.

        Bitte halte während aller Durchgänge deinen Blick auf das Fixationskreuz in der Bildschirmmitte gerichtet.
  Routine practiceFrame1
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    CodeComponent codeObjectParametersPractice
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 0
        ternusDuration = 0.2

        # default Frame 2 Ternus colors
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"
      Begin Routine:
        colorList = [
            "#E41A1C",  # red
            "#377EB8",  # blue
            "#4DAF4A",  # green
            "#984EA3",  # purple
            "#FF7F00",  # orange
            "#A65628",  # brown
            "#F781BF",  # pink
            "#1B9E77"   # teal
        ]

        causalColor = np.random.choice(colorList)

        direction = np.random.choice(["LR", "RL"])

        if direction == "LR":
            leftFrame1_Pos = (-3, 2)
            middleFrame1_Pos = (-1, 2)
            rightFrame1_Pos = (1, 2)

            leftFrame2_Pos = (-1, 2)
            middleFrame2_Pos = (1, 2)
            rightFrame2_Pos = (3, 2)

        elif direction == "RL":
            leftFrame1_Pos = (-1, 2)
            middleFrame1_Pos = (1, 2)
            rightFrame1_Pos = (3, 2)

            leftFrame2_Pos = (-3, 2)
            middleFrame2_Pos = (-1, 2)
            rightFrame2_Pos = (1, 2)

        # default: invisible causal objects
        portalOpacity = 0
        barrierOpacity = 0
        barrierPos = (2,2)

        # default Ternus color
        ternusColor = "black"

        # reset every trial
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"

        if conditions_practice == "Portal":
            portalOpacity = 1
            barrierOpacity = 0


        elif conditions_practice == "Barrier":
            portalOpacity = 0
            barrierOpacity = 1


        elif conditions_practice == "Standard":
            portalOpacity = 0
            barrierOpacity = 0
            ternusColor = "black"

        # color-change only in Portal/Barrier
        if conditions_practice == "Portal" or conditions_practice == "Barrier":
            if direction == "LR":
                rightFrame2_Color = causalColor
                barrierPos = (2,2)
            elif direction == "RL":
                leftFrame2_Color = causalColor
                barrierPos = (-2,2)

        thisExp.addData("causalColor", causalColor)
        thisExp.addData("direction", direction)
    PolygonComponent ternusObjLeftPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddlePrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRightPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalLeftPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRightPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent BarrierPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine practiceFrame2
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    KeyboardComponent keyPractice
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = $ternusDuration
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    PolygonComponent ternusObjLeftPrac_2
      fillColor [set every repeat] = $leftFrame2_Color
      lineColor [set every repeat] = $leftFrame2_Color
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddlePrac_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRightPrac_2
      fillColor [set every repeat] = $rightFrame2_Color
      lineColor [set every repeat] = $rightFrame2_Color
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossPrac_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeftPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRightPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent BarrierPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blankISI_Practice
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    PolygonComponent FixationCrossBlankPractice
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_practice
      units = deg
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  Routine practiceFrame2_2
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    KeyboardComponent key_resp_3
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent ternusObjLeft_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight_7
      fillColor [set every repeat] = $ternusColor
      lineColor [set every repeat] = $ternusColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeft_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos = (2, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine exampleFrame1
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    CodeComponent codeMovementDirection
      Code Type = Auto->JS
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      Begin Routine:
        direction = np.random.choice(["LR", "RL"])
        thisExp.addData("direction", direction)

        if direction == "LR":
            leftFrame1_Pos = (-3, 2)
            middleFrame1_Pos = (-1, 2)
            rightFrame1_Pos = (1, 2)

            leftFrame2_Pos = (-1, 2)
            middleFrame2_Pos = (1, 2)
            rightFrame2_Pos = (3, 2)

        elif direction == "RL":
            leftFrame1_Pos = (-1, 2)
            middleFrame1_Pos = (1, 2)
            rightFrame1_Pos = (3, 2)

            leftFrame2_Pos = (-3, 2)
            middleFrame2_Pos = (-1, 2)
            rightFrame2_Pos = (1, 2)
    PolygonComponent ternusExampleLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleMiddle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossExample
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine exampleFrame2
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    PolygonComponent ternusExampleLeft_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleMiddle_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleRight_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossExample_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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Flow
  Routine InstructionScreen
  LoopInitiator elementMotionDemo loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine exampleFrame1
    Routine exampleFrame2
    Routine blank800
  LoopTerminator elementMotionDemo
  Routine elementMotionExplained
  LoopInitiator groupMotionDemo loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine exampleFrame1
    Routine blank160
    Routine exampleFrame2
    Routine blank800
  LoopTerminator groupMotionDemo
  Routine groupMotionExplained
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = practiceLoopConditionsTeamprojekt.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditions_practice': 'Portal', 'ISI_practice': 0},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.02},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.08},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.16},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.02},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.08},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.16},
      {'conditions_practice': 'Standard', 'ISI_practice': 0},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.02},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.08},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.16}]
    Routine practiceFrame1
    Routine blankISI_Practice
    Routine practiceFrame2
    Routine blank800
  LoopTerminator practiceLoop
  Routine StartScreen
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = trialLoopConditionsTeamprojekt.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'condition': 'Portal', 'interstim_interval': 0},
        {'condition': 'Portal', 'interstim_interval': 0.01},
        {'condition': 'Portal', 'interstim_interval': 0.02},
        {'condition': 'Portal', 'interstim_interval': 0.04},
        {'condition': 'Portal', 'interstim_interval': 0.08},
        {'condition': 'Portal', 'interstim_interval': 0.16},
        {'condition': 'Barrier', 'interstim_interval': 0},
        {'condition': 'Barrier', 'interstim_interval': 0.01},
        {'condition': 'Barrier', 'interstim_interval': 0.02},
        {'condition': 'Barrier', 'interstim_interval': 0.04},
        {'condition': 'Barrier', 'interstim_interval': 0.08},
        {'condition': 'Barrier', 'interstim_interval': 0.16},
        {'condition': 'Standard', 'interstim_interval': 0},
        {'condition': 'Standard', 'interstim_interval': 0.01},
        {'condition': 'Standard', 'interstim_interval': 0.02},
        {'condition': 'Standard', 'interstim_interval': 0.04},
        {'condition': 'Standard', 'interstim_interval': 0.08},
        {'condition': 'Standard', 'interstim_interval': 0.16}]
      Routine ternusFrame1
      Routine blankISI
      Routine ternusFrame2
      Routine blank800
    LoopTerminator trialLoop
    Routine blockBreak
  LoopTerminator blockLoop
